opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: DSF 
author: A. Shemy
description: Preparation of the standard protocol for DSF 
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 1}
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, slot: 4}
  Adapter+ plate: {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 5}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - MilliQ
  - Protein A 
  - Buffer 4X
  - Dye 8X: {description: 8X dye prepared from 1000X dye}
  - Compound A
ingredLocations:
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap:
    MilliQ {volume: 1000}: A1
    Protein A  {volume: 66}: B1
    Dye 8X {volume: 25}: C1
    Buffer 4X {volume: 50}: D1
    Compound A {volume: 10}: B2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 12.5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  dispense_labware: Adapter+ plate
  dispense_wells: A1-A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: B1
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  dispense_labware: Adapter+ plate
  dispense_wells: B1, C1, B2, C2, B3, C3
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: D1
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  dispense_labware: Adapter+ plate
  dispense_wells: A1-C1, A2-C2, A3-C3
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: C1
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  dispense_labware: Adapter+ plate
  dispense_wells: A1-C1, A2-C2, A3-C3
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: B2
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  dispense_labware: Adapter+ plate
  dispense_wells: C1-C3
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2.5
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A1
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  dispense_labware: Adapter+ plate
  dispense_wells: B1-B3
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 12.5, labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 12.5, labware: Adapter+ plate, well: A1, offsetFromBottomMm: 0.5, flowRate: 3.78}
- dropTip: {pipette: p20_single_gen2, labware: Trash, well: A1}
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 20 µL, well: B1}
- aspirate: {pipette: p20_single_gen2, volume: 12.5, labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
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