opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: Protein stability assay
author: Ahmed Shemy
description: Protein stability assay in different buffer conditions
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_multi_gen2: {mount: left}
  p20_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 1}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 4}
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, slot: 5}
  NEST 96 Deepwell Plate 2mL: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, slot: 10}
  NEST 96 Well Plate 100 µL PCR Full Skirt: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: 11}
  Opentrons 96 Tip Rack 20 µL (1): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 9}
pipetteTiprackAssignments:
  p20_multi_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Protein A: {description: protein to be assayed}
  - Buffer
ingredLocations:
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap:
    Protein A {volume: 1000}: A1
  NEST 96 Deepwell Plate 2mL:
    Buffer {volume: 1000}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: once
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A1
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  dispense_flowRate: 1
  dispense_mmFromBottom: 4
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 8
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: perSource
  aspirate_labware: NEST 96 Deepwell Plate 2mL
  aspirate_wells: A1-A12
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 10
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 10, labware: NEST 96 Well Plate 100 µL PCR Full Skirt, well: A1, offsetFromBottomMm: 4, flowRate: 1}
- touchTip: {pipette: p20_single_gen2, labware: NEST 96 Well Plate 100 µL PCR Full Skirt, well: A1, offsetFromBottomMm: 8}
- blowout: {pipette: p20_single_gen2, labware: NEST 96 Well Plate 100 µL PCR Full Skirt, well: A1, flowRate: 1, offsetFromBottomMm: 14.78}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
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